<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.0-alpha015"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Duration" />
        <Property Name="MaxRadius" />
        <Property Name="MonitorDistance" />
        <Property Name="InitialRadius" />
        <Property Name="InitialVirtualDistance" />
        <Property Name="LinearApproachingVelocity" />
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>LoomRangeAnimation</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Duration" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="TimeSpanProperty">
                <Value>PT0S</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Duration</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Duration</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TotalSeconds</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Duration" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Duration</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TotalSeconds</Selector>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="DoubleProperty">
                <Value>-1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="RangeBegin" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.RangeAnimation.bonsai">
              <Duration>0.5</Duration>
              <RangeBegin>-0.5</RangeBegin>
              <RangeEnd>0</RangeEnd>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="MaxRadius" />
              <Property Name="MonitorDistance" />
              <Property Name="InitialRadius" />
              <Property Name="InitialVirtualDistance" />
              <Property Name="LinearApproachingVelocity" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CalculateLoomRadius">
                <p1:MaxRadius>25</p1:MaxRadius>
                <p1:MonitorDistance>18</p1:MonitorDistance>
                <p1:InitialRadius>0.5</p1:InitialRadius>
                <p1:InitialVirtualDistance>12.5</p1:InitialVirtualDistance>
                <p1:LinearApproachingVelocity>25</p1:LinearApproachingVelocity>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="11" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="13" Label="Source1" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>